begintemplate LR_neuron_tuned

proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  totalarea()
}

create dend[16], soma[113], apic[18]
public CurrentClamp, voltagem, spiketimes, soma, apic, dend,AMPAlist, basal
objref CurrentClamp, CurrentClamp1, voltagem,AMPAlist,synAMPA


proc topol() { local i
  for i = 1, 3 connect dend[i](0), dend(0.5)
  for i = 4, 5 connect dend[i](0), dend[3](1)
  for i = 6, 8 connect dend[i](0), dend[i-1](1)
  connect dend[9](0), dend[7](1)
  for i = 10, 11 connect dend[i](0), dend[9](1)
  connect dend[12](0), dend(0.5)
  for i = 13, 14 connect dend[i](0), dend[i-1](1)
  connect dend[15](0), dend[13](1)
  connect soma(0), dend(0.5)
  for i = 1, 3 connect soma[i](0), soma[i-1](1)
  connect soma[4](0), soma[2](1)
  connect soma[5](0), soma[1](1)
  connect soma[6](0), soma(1)
  connect soma[7](0), dend(0.5)
  for i = 8, 9 connect soma[i](0), soma[7](1)
  connect soma[10](0), dend(0.5)
  for i = 11, 12 connect soma[i](0), soma[10](1)
  for i = 13, 14 connect soma[i](0), soma[12](1)
  for i = 15, 16 connect soma[i](0), soma[14](1)
  connect soma[17](0), dend(0.5)
  for i = 18, 19 connect soma[i](0), soma[17](1)
  for i = 20, 21 connect soma[i](0), soma[19](1)
  for i = 22, 23 connect soma[i](0), soma[21](1)
  connect soma[24](0), dend[6](1)
  for i = 25, 26 connect soma[i](0), soma[24](1)
  connect soma[27](0), dend[6](1)
  for i = 28, 29 connect soma[i](0), soma[27](1)
  connect soma[30](0), dend[6](1)
  for i = 31, 32 connect soma[i](0), soma[30](1)
  connect soma[33](0), dend[5](1)
  for i = 34, 35 connect soma[i](0), soma[33](1)
  for i = 36, 38 connect soma[i](0), dend[5](1)
  for i = 39, 40 connect soma[i](0), soma[38](1)
  connect soma[41](0), dend(0.5)
  for i = 42, 43 connect soma[i](0), soma[41](1)
  connect soma[44](0), dend(0.5)
  for i = 45, 46 connect soma[i](0), soma[44](1)
  connect soma[47](0), dend(0.5)
  for i = 48, 49 connect soma[i](0), soma[47](1)
  connect soma[50](0), dend(0.5)
  for i = 51, 52 connect soma[i](0), soma[i-1](1)
  connect soma[53](0), soma[51](1)
  for i = 54, 55 connect soma[i](0), soma[53](1)
  for i = 56, 57 connect soma[i](0), soma[55](1)
  for i = 58, 59 connect soma[i](0), soma[57](1)
  connect soma[60](0), soma[50](1)
  connect soma[61](0), dend[12](1)
  for i = 62, 63 connect soma[i](0), soma[61](1)
  for i = 64, 65 connect soma[i](0), soma[63](1)
  for i = 66, 67 connect soma[i](0), soma[65](1)
  connect soma[68](0), dend[12](1)
  for i = 69, 70 connect soma[i](0), soma[68](1)
  connect soma[71](0), dend[12](1)
  for i = 72, 73 connect soma[i](0), soma[71](1)
  for i = 74, 75 connect soma[i](0), soma[73](1)
  for i = 76, 77 connect soma[i](0), soma[75](1)
  connect soma[78](0), dend(0.5)
  for i = 79, 80 connect soma[i](0), soma[78](1)
  for i = 81, 82 connect soma[i](0), soma[80](1)
  for i = 83, 84 connect soma[i](0), soma[82](1)
  for i = 85, 86 connect soma[i](0), dend(0.5)
  connect soma[87](0), apic(1)
  for i = 88, 89 connect soma[i](0), soma[87](1)
  connect soma[90](0), apic(1)
  for i = 91, 92 connect soma[i](0), soma[90](1)
  connect soma[93](0), apic(1)
  for i = 94, 95 connect soma[i](0), soma[93](1)
  connect soma[96](0), dend(0.5)
  for i = 97, 98 connect soma[i](0), soma[96](1)
  for i = 99, 100 connect soma[i](0), soma[98](1)
  for i = 101, 102 connect soma[i](0), soma[100](1)
  connect soma[103](0), dend(0.5)
  for i = 104, 105 connect soma[i](0), soma[103](1)
  connect soma[106](0), dend(0.5)
  for i = 107, 108 connect soma[i](0), soma[106](1)
  for i = 109, 110 connect soma[i](0), soma[108](1)
  for i = 111, 112 connect soma[i](0), soma[110](1)
  connect apic(0), dend(0.5)
  for i = 1, 4 connect apic[i](0), apic[i-1](1)
  connect apic[5](0), apic[3](1)
  for i = 6, 7 connect apic[i](0), apic[5](1)
  connect apic[8](0), apic[2](1)
  connect apic[9](0), apic[1](1)
  for i = 10, 11 connect apic[i](0), apic[9](1)
  for i = 12, 13 connect apic[i](0), apic[i-1](1)
  connect apic[14](0), apic[12](1)
  for i = 15, 16 connect apic[i](0), apic[14](1)
  connect apic[17](0), apic[11](1)
  basic_shape()
}
proc shape3d_1() {
  dend {pt3dclear()
	pt3dadd(210.62, -186.596, -38.2946, 3.102)
	pt3dadd(210.63, -186.597, -38.2947, 3.104)
  }
  soma {pt3dclear()
	pt3dadd(213.303, -188.176, -39.45, 2.242)
	pt3dadd(213.206, -189.344, -39.816, 0.194)
  }
  soma[1] {pt3dclear()
	pt3dadd(213.206, -189.344, -39.816, 0.194)
	pt3dadd(213.206, -189.538, -39.816, 0.194)
	pt3dadd(213.012, -189.732, -39.816, 0.194)
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  }
}
proc shape3d_2() {
  soma[8] {	pt3dadd(210.49, -191.284, -38.64, 0.194)
	pt3dadd(210.102, -191.284, -38.64, 0.194)
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  }
}
proc shape3d_3() {
  soma[16] {	pt3dadd(207.386, -180.614, -40.32, 0.194)
	pt3dadd(207.192, -180.614, -40.32, 0.194)
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  }
}
proc shape3d_4() {
  dend[4] {	pt3dadd(220.19, -172.272, -39.816, 1.6)
	pt3dadd(221.16, -171.853, -39.664, 1.302)
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  }
}
proc shape3d_5() {
  dend[8] {	pt3dadd(159.17, -146.825, -34.621, 0.874)
	pt3dadd(158.498, -146.664, -33.936, 0.984)
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  }
}
proc shape3d_6() {
  soma[26] {	pt3dadd(212.624, -181.778, -37.632, 0.194)
	pt3dadd(212.624, -181.584, -37.632, 0.194)
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  }
}
proc shape3d_7() {
  soma[34] {	pt3dadd(208.356, -188.762, -37.296, 0.194)
	pt3dadd(207.968, -188.374, -37.296, 0.194)
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  }
}
proc shape3d_8() {
  soma[42] {	pt3dadd(210.684, -190.508, -41.16, 0.194)
	pt3dadd(210.49, -190.702, -41.16, 0.194)
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  }
}
proc shape3d_9() {
  soma[49] {	pt3dadd(206.028, -185.464, -41.664, 0.194)
	pt3dadd(206.028, -185.852, -41.664, 0.194)
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  }
}
proc shape3d_10() {
  soma[58] {	pt3dadd(208.744, -190.702, -42.168, 0.194)
	pt3dadd(208.356, -190.702, -42.168, 0.194)
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  }
}
proc shape3d_11() {
  dend[15] {	pt3dadd(124.742, -138.904, -31.08, 0.97)
	pt3dadd(123.958, -138.188, -30.332, 0.83)
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  }
}
proc shape3d_12() {
  soma[69] {	pt3dadd(213.594, -187.792, -41.328, 0.194)
	pt3dadd(213.4, -187.986, -41.328, 0.194)
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  }
}
proc shape3d_13() {
  soma[77] {	pt3dadd(209.326, -181.778, -42.672, 0.194)
	pt3dadd(210.49, -181.778, -42.672, 0.194)
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  }
}
proc shape3d_14() {
  soma[86] {	pt3dadd(207.968, -183.136, -37.128, 0.194)
	pt3dadd(207.968, -183.524, -37.128, 0.194)
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  }
}
proc shape3d_15() {
  apic[4] {	pt3dadd(272.958, -349.782, -38.136, 0.626)
	pt3dadd(273.576, -350.388, -37.616, 0.834)
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  }
}
proc shape3d_16() {
  apic[9] {	pt3dadd(202.73, -236.68, -40.656, 1.2)
	pt3dadd(202.536, -237.65, -40.32, 1.2)
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  }
}
proc shape3d_17() {
  apic[13] {	pt3dadd(134.636, -347.648, -40.152, 0.582)
	pt3dadd(133.666, -348.036, -40.488, 0.582)
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  }
}
proc shape3d_18() {
  apic[17] {	pt3dadd(212.43, -351.528, -34.944, 0.614)
	pt3dadd(213.45, -351.51, -34.986, 0.582)
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  }
}
proc shape3d_19() {
  soma[95] {	pt3dadd(210.296, -191.478, -39.144, 0.194)
	pt3dadd(210.684, -191.09, -39.144, 0.194)
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  }
}
proc shape3d_20() {
  soma[104] {	pt3dadd(206.998, -190.314, -39.984, 0.194)
	pt3dadd(206.998, -190.12, -39.984, 0.194)
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  }
}
proc shape3d_21() {
  soma[112] {	pt3dadd(207.192, -180.42, -38.808, 0.194)
	pt3dadd(207.192, -180.614, -38.808, 0.194)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
}

////////////////////////dlambda rule////////////////////////////////////

func lambda_f() { local i, x1, x2, d1, d2, lam
        if (n3d() < 2) {
                return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
        }
// above was too inaccurate with large variation in 3d diameter
// so now we use all 3-d points to get a better approximate lambda
        x1 = arc3d(0)
        d1 = diam3d(0)
        lam = 0
        for i=1, n3d()-1 {
                x2 = arc3d(i)
                d2 = diam3d(i)
                lam += (x2 - x1)/sqrt(d1 + d2)
                x1 = x2   d1 = d2
        }
        //  length of the section in units of lambda
        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

        return L/lam
}


objref all, somatic, basal, apical, dendritic
proc subsets() { local i
  objref all, somatic, basal, apical
  all = new SectionList()
    for i=0, 15 dend[i] all.append()
    for i=0, 112 soma[i] all.append()
    for i=0, 17 apic[i] all.append()

  somatic = new SectionList()
    for i=0, 112 soma[i] somatic.append()

  basal = new SectionList()
    for i=0, 15 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 17 apic[i] apical.append()

  dendritic = new SectionList()
    for i=0, 15 dend[i] dendritic.append()
    for i=0, 17 apic[i] dendritic.append()

}
proc geom() {
}



proc geom_nseg() {
freq = 100      
d_lambda = 0.1

forall { 

nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1  


}

}



proc totalarea() { local sum
  finitialize()
  sum = 0
  forsec somatic  for (x,0) sum += area(x)
  print "total surface area = ", sum, " um2"
}



objref netCell_AHP, refrac_AHP, spikecount,spiketimes, shapeobj,r
proc biophys() {

AMPAlist = new List()
r = new Random(10)

forsec all { 

insert pas
g_pas = 0.00007 // S/cm2
e_pas = -69 // mV 
celsius = 30
cm=1
insert nas_rs
insert kdrs1_LR
insert kd
ena = 50
ek =-96


}


forsec somatic {

diam = 0.1
gna_nas_rs =  5.5  
gkdr_kdrs1_LR = 0.07 
gkd_kd = 0.075 
tau_a_kd =1.4 


refrac_AHP = new AHP(0.5)
refrac_AHP.tau=500  // the decay time constant 500
refrac_AHP.e= ek  // [mV] reversal potential
refrac_AHP.gr= 900e-6 //900e-6   //[uS] conductance after the abs refractory period
netCell_AHP=new NetCon(&v(0.5),refrac_AHP,0,1,0e-6) //10e-6
}

forsec dendritic {

gna_nas_rs =  0.81   
gkdr_kdrs1_LR = 0.006  
gkd_kd = 0

}









forsec dendritic Ra = 200
forsec somatic Ra = 1e-9


}





proc init(){
celldef()
access soma[0]
voltagem = new Vector()
voltagem.record(&v(0.5))
CurrentClamp = new IClamp(0.5)
CurrentClamp.del= 500
CurrentClamp.amp = 0.05
CurrentClamp.dur = 1000

CurrentClamp1 = new IClamp(0.5)
CurrentClamp1.del= 0
CurrentClamp1.amp = 0 
CurrentClamp1.dur = 1e9

spikecount=new APCount(0.5)
spiketimes=new Vector()
spikecount.record(spiketimes)
}


endtemplate LR_neuron_tuned
