begintemplate RS_neuron_tuned
proc celldef() {
  topol()
  subsets()
  geom()
  biophys()
  geom_nseg()
  totalarea()
}

create soma[126], dend[61], apic[20]
public CurrentClamp, voltagem, spiketimes, soma,dend,apic, AMPAlist, basal
objref CurrentClamp, voltagem, spikecount, spiketimes, AMPAlist,synAMPA

proc topol() { local i
  connect soma[1](0), soma(0.5)
  connect soma[2](0), dend[1](1)
  connect soma[3](0), soma[2](1)
  connect soma[4](0), dend[2](1)
  for i = 5, 9 connect soma[i](0), soma[i-1](1)
  connect soma[10](0), dend[3](0)
  for i = 11, 12 connect soma[i](0), soma[10](1)
  connect soma[13](0), soma[9](1)
  connect soma[14](0), soma[8](1)
  connect soma[15](0), soma[7](1)
  connect soma[16](0), soma[6](1)
  connect soma[17](0), soma[5](1)
  connect soma[18](0), soma[4](1)
  connect soma[19](0), dend[2](1)
  connect soma[20](0), dend[5](1)
  for i = 21, 22 connect soma[i](0), soma[20](1)
  connect soma[23](0), dend[2](0)
  for i = 24, 25 connect soma[i](0), soma[23](1)
  connect soma[26](0), soma[3](1)
  connect soma[27](0), soma[2](1)
  connect soma[28](0), dend[1](1)
  for i = 29, 30 connect soma[i](0), soma[28](1)
  connect soma[31](0), dend[1](1)
  for i = 32, 33 connect soma[i](0), soma[31](1)
  connect soma[34](0), dend(0)
  for i = 35, 36 connect soma[i](0), soma[34](1)
  connect soma[37](0), soma[1](1)
  for i = 38, 39 connect soma[i](0), soma(0.5)
  connect soma[40](0), dend[43](1)
  for i = 41, 42 connect soma[i](0), soma[40](1)
  connect soma[43](0), dend[44](1)
  for i = 44, 45 connect soma[i](0), soma[43](1)
  connect soma[46](0), soma[39](1)
  for i = 47, 52 connect soma[i](0), soma(0.5)
  for i = 53, 54 connect soma[i](0), apic(1)
  for i = 55, 56 connect soma[i](0), soma[i-1](1)
  connect soma[57](0), soma[55](1)
  for i = 58, 59 connect soma[i](0), soma[i-1](1)
  connect soma[60](0), dend[45](0)
  connect soma[61](0), soma[60](1)
  connect soma[62](0), dend[46](0)
  for i = 63, 64 connect soma[i](0), soma[62](1)
  connect soma[65](0), dend[51](1)
  for i = 66, 68 connect soma[i](0), soma[i-1](1)
  connect soma[69](0), soma[67](1)
  connect soma[70](0), soma[66](1)
  connect soma[71](0), soma[65](1)
  connect soma[72](0), dend[51](1)
  for i = 73, 74 connect soma[i](0), soma[72](1)
  connect soma[75](0), soma[61](1)
  connect soma[76](0), soma[60](1)
  connect soma[77](0), dend[45](0)
  for i = 78, 79 connect soma[i](0), soma[77](1)
  connect soma[80](0), dend[52](1)
  for i = 81, 82 connect soma[i](0), soma[80](1)
  connect soma[83](0), dend[52](1)
  for i = 84, 85 connect soma[i](0), soma[83](1)
  connect soma[86](0), dend[52](1)
  for i = 87, 88 connect soma[i](0), soma[86](1)
  connect soma[89](0), dend[53](1)
  connect soma[90](0), soma[89](1)
  connect soma[91](0), dend[54](1)
  for i = 92, 93 connect soma[i](0), soma[91](1)
  connect soma[94](0), dend[54](0)
  for i = 95, 96 connect soma[i](0), soma[94](1)
  connect soma[97](0), dend[60](1)
  for i = 98, 99 connect soma[i](0), soma[97](1)
  connect soma[100](0), soma[90](1)
  connect soma[101](0), soma[89](1)
  connect soma[102](0), soma[59](1)
  connect soma[103](0), soma[58](1)
  connect soma[104](0), soma[57](1)
  connect soma[105](0), soma[54](1)
  connect soma[106](0), apic(0)
  for i = 107, 108 connect soma[i](0), soma[106](1)
  connect soma[109](0), apic(0)
  connect soma[110](0), apic[1](1)
  for i = 111, 112 connect soma[i](0), soma[110](1)
  connect soma[113](0), apic[1](1)
  for i = 114, 115 connect soma[i](0), soma[113](1)
  connect soma[116](0), apic[2](1)
  for i = 117, 118 connect soma[i](0), soma[116](1)
  connect soma[119](0), apic[2](1)
  for i = 120, 121 connect soma[i](0), soma[119](1)
  for i = 122, 123 connect soma[i](0), soma[121](1)
  for i = 124, 125 connect soma[i](0), soma[123](1)
  connect dend(0), soma[1](1)
  connect dend[1](0), dend(1)
  connect dend[2](0), soma[3](1)
  connect dend[3](0), soma[9](1)
  connect dend[4](0), dend[3](0)
  connect dend[5](0), dend[2](0)
  for i = 6, 10 connect dend[i](0), dend[i-1](1)
  connect dend[11](0), dend[9](1)
  for i = 12, 13 connect dend[i](0), dend[11](1)
  connect dend[14](0), dend[8](1)
  connect dend[15](0), dend[7](1)
  for i = 16, 17 connect dend[i](0), dend[15](1)
  for i = 18, 19 connect dend[i](0), dend[i-1](1)
  connect dend[20](0), dend[18](1)
  connect dend[21](0), dend[17](1)
  connect dend[22](0), dend[6](1)
  for i = 23, 24 connect dend[i](0), dend[i-1](1)
  connect dend[25](0), dend[23](1)
  connect dend[26](0), dend[22](1)
  for i = 27, 28 connect dend[i](0), dend[26](1)
  connect dend[29](0), dend[5](1)
  connect dend[30](0), dend[2](0)
  connect dend[31](0), dend[1](1)
  for i = 32, 34 connect dend[i](0), dend[i-1](1)
  connect dend[35](0), dend[33](1)
  connect dend[36](0), dend[32](1)
  connect dend[37](0), dend[31](1)
  for i = 38, 39 connect dend[i](0), dend[i-1](1)
  connect dend[40](0), dend[38](1)
  connect dend[41](0), dend[37](1)
  connect dend[42](0), soma[39](1)
  connect dend[43](0), dend[42](0)
  connect dend[44](0), dend[43](1)
  connect dend[45](0), soma[59](1)
  connect dend[46](0), soma[61](1)
  for i = 47, 48 connect dend[i](0), dend[i-1](1)
  connect dend[49](0), dend[47](1)
  connect dend[50](0), dend[46](1)
  connect dend[51](0), dend[46](0)
  connect dend[52](0), dend[45](0)
  connect dend[53](0), dend[52](1)
  connect dend[54](0), soma[90](1)
  for i = 55, 56 connect dend[i](0), dend[i-1](1)
  connect dend[57](0), dend[55](1)
  for i = 58, 59 connect dend[i](0), dend[57](1)
  connect dend[60](0), dend[54](0)
  connect apic(0), soma(0.5)
  connect apic[1](0), apic(0)
  for i = 2, 7 connect apic[i](0), apic[i-1](1)
  connect apic[8](0), apic[6](1)
  connect apic[9](0), apic[5](1)
  for i = 10, 11 connect apic[i](0), apic[9](1)
  for i = 12, 13 connect apic[i](0), apic[11](1)
  connect apic[14](0), apic[4](1)
  for i = 15, 16 connect apic[i](0), apic[14](1)
  for i = 17, 18 connect apic[i](0), apic[16](1)
  connect apic[19](0), apic[3](1)
  basic_shape()
}
proc shape3d_1() {
  soma {pt3dclear()
	pt3dadd(204.01, -231.587, -13.7529, 4.844)
	pt3dadd(204.009, -231.586, -13.7528, 4.842)
  }
  soma[1] {pt3dclear()
	pt3dadd(202.342, -228.726, -12.852, 0.194)
	pt3dadd(202.536, -228.92, -12.852, 0.194)
	pt3dadd(202.73, -228.92, -12.852, 0.194)
	pt3dadd(202.924, -229.114, -12.852, 0.194)
	pt3dadd(203.312, -229.114, -12.852, 0.194)
	pt3dadd(203.506, -228.92, -12.852, 0.194)
	pt3dadd(205.64, -228.92, -12.852, 0.194)
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  }
}
proc shape3d_2() {
  soma[6] {	pt3dadd(201.76, -229.696, -15.876, 0.194)
	pt3dadd(201.566, -229.502, -15.876, 0.194)
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  }
}
proc shape3d_3() {
  soma[13] {	pt3dadd(200.402, -230.278, -16.38, 0.194)
	pt3dadd(200.014, -230.278, -16.38, 0.194)
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  }
}
proc shape3d_4() {
  dend[10] {	pt3dadd(289.254, -132.696, -14.868, 0.7)
	pt3dadd(290.255, -132.12, -14.886, 0.592)
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  }
}
proc shape3d_5() {
  dend[13] {	pt3dadd(235.413, -116.731, -18.939, 0.548)
  }
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  }
}
proc shape3d_6() {
  dend[19] {	pt3dadd(275.052, -238.27, -25.634, 0.762)
	pt3dadd(275.868, -239.202, -25.956, 0.704)
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  }
}
proc shape3d_7() {
  dend[28] {	pt3dadd(213.83, -180.226, -15.232, 0.68)
	pt3dadd(213.547, -178.133, -15.897, 0.7)
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  }
}
proc shape3d_8() {
  soma[25] {	pt3dadd(206.998, -235.322, -15.372, 0.194)
	pt3dadd(206.61, -235.71, -15.372, 0.194)
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  }
}
proc shape3d_9() {
  dend[34] {	pt3dadd(190.702, -310.788, -17.892, 0.584)
	pt3dadd(189.849, -311.139, -18.151, 0.614)
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  }
}
proc shape3d_10() {
  dend[39] {	pt3dadd(184.845, -302.242, -20.332, 0.582)
	pt3dadd(184.688, -303.61, -20.664, 0.632)
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  }
}
proc shape3d_11() {
  soma[32] {	pt3dadd(210.102, -230.472, -12.6, 0.194)
	pt3dadd(209.714, -230.084, -12.6, 0.194)
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  }
}
proc shape3d_12() {
  soma[39] {	pt3dadd(209.132, -229.696, -13.86, 0.194)
	pt3dadd(209.326, -229.89, -13.86, 0.194)
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  }
}
proc shape3d_13() {
  soma[45] {	pt3dadd(206.998, -235.322, -14.112, 0.194)
	pt3dadd(205.834, -235.322, -14.112, 0.194)
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  }
}
proc shape3d_14() {
  soma[50] {	pt3dadd(206.416, -235.322, -13.356, 0.194)
	pt3dadd(206.61, -235.128, -13.356, 0.194)
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  }
}
proc shape3d_15() {
  soma[56] {	pt3dadd(209.132, -232.606, -10.08, 0.194)
	pt3dadd(209.132, -230.666, -10.08, 0.194)
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  }
}
proc shape3d_16() {
  dend[47] {	pt3dadd(188.847, -281.865, -4.263, 0.584)
	pt3dadd(188.956, -282.852, -4.536, 0.584)
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  }
}
proc shape3d_17() {
  dend[50] {	pt3dadd(242.694, -301.282, -6.3, 0.582)
	pt3dadd(242.431, -302.371, -6.587, 0.582)
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  }
}
proc shape3d_18() {
  soma[70] {  }
  soma[71] {pt3dclear()
	pt3dadd(203.506, -236.292, -6.804, 0.194)
	pt3dadd(202.342, -236.292, -6.804, 0.194)
	pt3dadd(202.148, -236.098, -6.804, 0.194)
	pt3dadd(201.76, -236.098, -6.804, 0.194)
	pt3dadd(201.566, -235.904, -6.804, 0.194)
	pt3dadd(201.372, -235.904, -6.804, 0.194)
	pt3dadd(200.984, -235.516, -6.804, 0.194)
	pt3dadd(200.79, -235.516, -6.804, 0.194)
	pt3dadd(200.596, -235.322, -6.804, 0.194)
	pt3dadd(200.596, -235.128, -6.804, 0.194)
	pt3dadd(200.208, -234.74, -6.804, 0.194)
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  }
}
proc shape3d_19() {
  soma[82] {	pt3dadd(206.416, -228.726, -8.568, 0.194)
	pt3dadd(206.61, -228.92, -8.568, 0.194)
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  }
}
proc shape3d_20() {
  soma[90] {	pt3dadd(207.968, -230.278, -8.064, 0.194)
	pt3dadd(207.968, -230.666, -8.064, 0.194)
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  }
}
proc shape3d_21() {
  soma[92] {	pt3dadd(203.506, -228.338, -9.072, 0.194)
	pt3dadd(203.118, -228.338, -9.072, 0.194)
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  }
}
proc shape3d_22() {
  soma[100] {	pt3dadd(205.446, -235.516, -8.064, 0.194)
	pt3dadd(205.446, -235.71, -8.064, 0.194)
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  }
}
proc shape3d_23() {
  soma[109] {	pt3dadd(198.85, -232.024, -11.592, 0.194)
	pt3dadd(199.044, -232.218, -11.592, 0.194)
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  }
}
proc shape3d_24() {
  soma[115] {	pt3dadd(206.222, -235.516, -11.088, 0.194)
	pt3dadd(205.64, -236.098, -11.088, 0.194)
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  }
}
proc shape3d_25() {
  apic[6] {	pt3dadd(73.915, -114.336, -14.395, 0.676)
	pt3dadd(73.914, -113.684, -14.364, 0.688)
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  }
}
proc shape3d_26() {
  apic[12] {	pt3dadd(67.19, -151.509, -46.506, 1.164)
	pt3dadd(65.773, -151.961, -47.882, 1.018)
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  }
}
proc shape3d_27() {
  apic[15] {	pt3dadd(63.987, -67.5, -31.23, 1.016)
	pt3dadd(63.607, -66.296, -31.444, 0.97)
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  }
}
proc shape3d_28() {
  apic[19] {	pt3dadd(197.189, -205.625, -7.668, 1.766)
	pt3dadd(197.104, -204.476, -6.3, 0.776)
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  }
}
proc shape3d_29() {
  soma[122] {	pt3dadd(197.298, -231.054, -14.868, 0.194)
	pt3dadd(196.91, -230.666, -14.868, 0.194)
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  }
}
proc basic_shape() {
  shape3d_1()
  shape3d_2()
  shape3d_3()
  shape3d_4()
  shape3d_5()
  shape3d_6()
  shape3d_7()
  shape3d_8()
  shape3d_9()
  shape3d_10()
  shape3d_11()
  shape3d_12()
  shape3d_13()
  shape3d_14()
  shape3d_15()
  shape3d_16()
  shape3d_17()
  shape3d_18()
  shape3d_19()
  shape3d_20()
  shape3d_21()
  shape3d_22()
  shape3d_23()
  shape3d_24()
  shape3d_25()
  shape3d_26()
  shape3d_27()
  shape3d_28()
  shape3d_29()
}

////////////////////////dlambda rule////////////////////////////////////

func lambda_f() { local i, x1, x2, d1, d2, lam
        if (n3d() < 2) {
                return 1e5*sqrt(diam/(4*PI*$1*Ra*cm))
        }
// above was too inaccurate with large variation in 3d diameter
// so now we use all 3-d points to get a better approximate lambda
        x1 = arc3d(0)
        d1 = diam3d(0)
        lam = 0
        for i=1, n3d()-1 {
                x2 = arc3d(i)
                d2 = diam3d(i)
                lam += (x2 - x1)/sqrt(d1 + d2)
                x1 = x2   d1 = d2
        }
        //  length of the section in units of lambda
        lam *= sqrt(2) * 1e-5*sqrt(4*PI*$1*Ra*cm)

        return L/lam
}


objref all, somatic, basal, apical, dendritic
proc subsets() { local i
  objref all, somatic, basal, apical
  all = new SectionList()
    for i=0, 125 soma[i] all.append()
    for i=0, 60 dend[i] all.append()
    for i=0, 19 apic[i] all.append()

  somatic = new SectionList()
    for i=0, 125 soma[i] somatic.append()

  basal = new SectionList()
    for i=0, 60 dend[i] basal.append()

  apical = new SectionList()
    for i=0, 19 apic[i] apical.append()

  dendritic = new SectionList()
    for i=0, 19 apic[i] dendritic.append() 
    for i=0, 60 dend[i] dendritic.append()


}
proc geom() {
}


proc geom_nseg() {
freq = 100      
d_lambda = 0.1

forall { 

nseg = int((L/(d_lambda*lambda_f(freq))+0.9)/2)*2 + 1  

}



}

objref netCell_AHP, refrac_AHP, shapeobj,r


proc biophys() {

AMPAlist = new List()
r = new Random(100)


forsec all { 

insert pas
g_pas = 0.00007 // S/cm2
e_pas = -69 // mV 
celsius = 30
cm=1

insert nas_rs
insert kdrs1
insert kd
ena = 50
ek =-96

}

forsec somatic {

gna_nas_rs = 2  
gkdr_kdrs1 = .02 
gkd_kd = 0.0125 
tau_a_kd = 1.4 

diam = 0.5   



refrac_AHP = new AHP(0.5)
refrac_AHP.tau=500  // the decay time constant 500
refrac_AHP.e= ek  // [mV] reversal potential
refrac_AHP.gr= 900e-6 //900e-6   //[uS] conductance after the abs refractory period
netCell_AHP=new NetCon(&v(0.5),refrac_AHP,0,1,600e-6) //900e-6
}

forsec dendritic {

gna_nas_rs =  0.5   
gkdr_kdrs1 = 0.008  
gkd_kd = 0


}











forsec dendritic Ra = 200
forsec somatic Ra = 1e-9 




}
proc totalarea() { local sum
  finitialize()
  sum = 0
  forsec somatic  for (x,0) sum += area(x)
  print "total surface area = ", sum, " um2"
}
	

proc init(){
celldef()
access soma[0]
voltagem = new Vector()
voltagem.record(&v(0.5))
CurrentClamp = new IClamp(0.5)
CurrentClamp.del= 500
CurrentClamp.amp = 0.05
CurrentClamp.dur = 1000
spikecount=new APCount(0.5)
spiketimes=new Vector()
spikecount.record(spiketimes)






}



endtemplate RS_neuron_tuned
